import trainableSegmentation.WekaSegmentation;
import trainableSegmentation.utils.Utils;
import ij.io.FileSaver;
import ij.IJ;
import ij.ImagePlus;

// https://imagej.net/Scripting_the_Trainable_Segmentation
// https://imagej.net/Script_Editor
// input train image

// create Weka Segmentation object
segmentator = new WekaSegmentation();

// model trained on raw image using locations specified by binary of one slice
//segmentator.loadClassifier( "/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/fiji_scripts/classifier_noise.model" );

// classifier trained by identifying regions by eye
//segmentator.loadClassifier( "/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/fiji_scripts/classifier_nois_eye1251.model" );
//siz = "sm_doscl_raw";

// make segmentation using by eye classification + training for noised images
segmentator.loadClassifier( "/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/fiji_scripts/classifier_sm_crop_nois_eye.model" );
siz = "sm";
cstr = "_crop";
//int[] zs = new int[] {516, 544, 617, 1253, 1474}; 
//int[] zs = new int[] {0, 9,18,28,37,46,55,64,74,83,92,101,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1999};
// with the above 5 removed
//int[] zs = new int[] {0, 9,18,28,37,46,55,64,74,83,92,101,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1999};
// with every 5 removed for ni=4
//int[] zs = new int[] {0,46,92,138,184,230,276,322,368,415,461,507,571,626,672,719,765,811,857,903,949,995,1041,1087,1133,1179,1225,1280,1327,1373,1419,1465,1520,1566,1612,1658,1704,1750,1796,1842,1888,1935,1981};
// with all the remaining z coordinates for ni=4
int[] zs = new int[] {3,4,5,6,7,8,9,10,11,12,13,14,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1999};

nii = 0;
while ( nii<=1 )
{
	nstr = "";
	// choose the type of noise
	if ( nii==0 ) 
	{
		nstr = "pt";
	}
	else 
	{
		nstr = "blur";
	}

	//for (zi=0; zi<2000; zi++)
	//{
	for (zi=0; zi<zs.length; zi++)
	{
		zii = zs[zi];
		zstr = Integer.toString(zii);
		while (zstr.length()<4)
		{
			zstr = "0"+zstr;
		}
		print(zstr);
	
		//for (ni=0; ni<=6; ni++)
		for (ni=4; ni<=4; ni++) // get a bunch of images for only n=4
		{
			nistr = Integer.toString(ni);
			print(nistr);
			fname = "/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/cropfigs/wg04"+siz+"_"+zstr+cstr+"_"+nstr+nistr+".tif";
			//print(fname);
			testimage  = IJ.openImage(fname);
			result_test= segmentator.applyClassifier( testimage );
			
			//new FileSaver( result_test ).saveAsTiff("/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/cropfigs/wg04sm_doscl_raw_"+zstr+"_"+nstr+nistr+"_weka.tif");
			new FileSaver( result_test ).saveAsTiff("/Users/mcbeck/Dropbox/HADES/segmentation/processing/data/cropfigs/wg04"+siz+"_"+zstr+cstr+"_"+nstr+nistr+"_weka_eye.tif");
		}
	}

	nii++;
}
